PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tid_psam_audiotest
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 5
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = early
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import prefs, sound, hardware
        import psychtoolbox as ptb

        # Load sound and assign to speaker
        testsound = sound.Sound("stereo_sine_wave.wav", sampleRate = 44100)
        testsound.setVolume(1)
      Begin Routine:
        # Get precise timing
        start_time = ptb.GetSecs()
        play_time = start_time + onset_t

        testsound.setVolume(intensity_t, log=False)





        # Schedule sound to start exactly 1 second after routine starts
        testsound.play(when=play_time)
      End Routine:
        testsound.stop()  # Ensure sound stops at the end of the routine
    SoundComponent sound_1
      disabled = True
      sound [set every repeat] = test_rect_44100fs_80ms_2ch.wav
      speakerIndex = 10.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
      volume [set every repeat] = 0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = late
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    ParallelOutComponent p_port_start
      address = 0x3ff8
      disabled = True
      register = EIO
      startData = 1
      startVal [time (s)] = $onset_t
      stopData = 0
      stopVal [duration (s)] = 1.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine fixation
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'onset_t': 1, 'intensity_t': 1},
      {'onset_t': 2, 'intensity_t': 1},
      {'onset_t': 1, 'intensity_t': 1},
      {'onset_t': 2, 'intensity_t': 1},
      {'onset_t': 1, 'intensity_t': 1},
      {'onset_t': 2, 'intensity_t': 1},
      {'onset_t': 1, 'intensity_t': 1},
      {'onset_t': 2, 'intensity_t': 1},
      {'onset_t': 1, 'intensity_t': 1}]
    Routine fixation
    Routine trial
  LoopTerminator trials
