PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = tid_psam_testing
  keyboardBackend = ioHub
  runMode = 0
  sortColumns = alphabetical
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Routines
  Routine welcome
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    TextComponent welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Welcome to this experiment
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  Routine instructions
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    TextComponent instructions_message
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment you have two different tasks.

        If the instruction says "Passive" you only have to fixate the moving circle in the middle of the sceen, without doing or saying anything.

        If the instruction says "Active" you are required to produce a short sound (/da/) AFTER the moving cricle reached the size of the inner circle AND the  circle turned green.

        In some trials a sound will be played BEFORE the circle turned green. In this case, still wait until the circle turns green and vocalize /da/ then (in case of Active trials). Try your best to ignore the sound by solely focusing on the circles.
    KeyboardComponent instruction_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    RoutineSettingsComponent ISI
      stopVal [duration (s)] = random.randint(500, 1500)/1000
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    PolygonComponent fixation_cross_ISI
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine test_sound
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    SoundComponent sound_1
      deviceLabel = findme
      sound [set every repeat] = C:/Experiments/tid_psam/psam/data/BIDS/stimuli/sub-01/sub-01_normal_probe.wav
      speakerIndex = 23.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    conditions:
      [{'trial_type': 'passive_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Passive', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'passive_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Passive', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'active_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Active', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'active_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Active', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0},
      {'trial_type': 'passive_practice', 'probe_onset': 0, 'probe_duration': 0, 'instruction': 'Passive', 'probe_type': 'c:\\Users\\timdr\\OneDrive\\Uni_Oldenburg\\4_Semester\\Master_Thesis\\Analysis_Experiment\\psam\\data\\sub-007\\stimuli\\sub-007_normal_probe.wav', 'probe_intensity': 0}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
    Routine ISI
    Routine test_sound
  LoopTerminator trials
